PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = wordpriming
  keyboardBackend = Pyglet
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $study_word
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine testph
    TextComponent text_2
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $study_testw
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = submit
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'bird'},
      {'study_word': 'horse'},
      {'study_word': 'golf'},
      {'study_word': 'print'},
      {'study_word': 'grass'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = study_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_testw': '_a_e'},
      {'study_testw': 't_g_r'},
      {'study_testw': '_oo_'},
      {'study_testw': 'c_sh_o_n'},
      {'study_testw': '_i_n_'},
      {'study_testw': 'b_r_'},
      {'study_testw': '_o_se'},
      {'study_testw': '_ol_'},
      {'study_testw': 'p_i_t'},
      {'study_testw': 'g_a_s'},
      {'study_testw': 'h_u_e'},
      {'study_testw': 'c_m_r_'},
      {'study_testw': 'b_a_s'},
      {'study_testw': 'm_u_d'},
      {'study_testw': '_l_ss'},
      {'study_testw': 'b_s_'},
      {'study_testw': 'b_o_d'},
      {'study_testw': 'L__k'},
      {'study_testw': 'f_n_'},
      {'study_testw': 'P_n_'}]
    Routine testph
  LoopTerminator trials_2
